# inSiliScope, Detail = Advanced: generated by tools/gen_mm_configs.py from the adapter and data/ -- do not edit.
# The simulated microscope (spec/MM_DEVICES.md, docs/mm-properties.md). Groups: Channel (the label mode and its
# typical dye; lasers and filter cube follow), Objective, Camera (sensor + its relay), Quality, Specimen, Drift.

# Reset
Property,Core,Initialize,0

# Devices
Device,Hub,inSiliScope,inSiliScope
Device,Camera,inSiliScope,Camera
Device,XYStage,inSiliScope,XYStage
Device,ZStage,inSiliScope,ZStage
Device,Objective,inSiliScope,Objective
Device,EmissionPath,inSiliScope,EmissionPath
Device,FilterCube,inSiliScope,FilterCube
Device,ExcitationFilter,inSiliScope,ExcitationFilter
Device,Dichroic,inSiliScope,Dichroic
Device,EmissionFilter,inSiliScope,EmissionFilter
Device,Lasers,inSiliScope,Lasers
Device,TransmittedLamp,inSiliScope,TransmittedLamp
Device,SampleHolder,inSiliScope,SampleHolder
Device,CellField,inSiliScope,CellField
Device,Fluorophores,inSiliScope,Fluorophores
Device,Renderer,inSiliScope,Renderer
Device,Multi Shutter,Utilities,Multi Shutter

# Pre-init settings for devices
Property,Hub,Detail,Advanced
Property,Hub,RandomSeed,42
Property,Camera,FovSize,256x256

# Hub (parent) references
Parent,Camera,Hub
Parent,XYStage,Hub
Parent,ZStage,Hub
Parent,Objective,Hub
Parent,EmissionPath,Hub
Parent,FilterCube,Hub
Parent,ExcitationFilter,Hub
Parent,Dichroic,Hub
Parent,EmissionFilter,Hub
Parent,Lasers,Hub
Parent,TransmittedLamp,Hub
Parent,SampleHolder,Hub
Parent,CellField,Hub
Parent,Fluorophores,Hub
Parent,Renderer,Hub

# Initialize
Property,Core,Initialize,1

# Focus directions (+Z moves the focal plane up through the sample)
FocusDirection,ZStage,1

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,Lasers
Property,Core,Focus,ZStage
Property,Core,XYStage,XYStage
Property,Core,AutoShutter,1

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Core,ChannelGroup,Channel
ConfigGroup,System,Startup,Multi Shutter,Physical Shutter 1,Lasers
ConfigGroup,System,Startup,Multi Shutter,Physical Shutter 2,TransmittedLamp
ConfigGroup,System,Startup,Fluorophores,Mode,DNA-PAINT
ConfigGroup,System,Startup,CellField,Microtubules_Label,Typical
ConfigGroup,System,Startup,Lasers,State,0
ConfigGroup,System,Startup,TransmittedLamp,State,0
ConfigGroup,System,Startup,Core,Shutter,Lasers
ConfigGroup,System,Startup,Objective,Label,100x/1.40 Oil
ConfigGroup,System,Startup,Camera,CameraPreset,Kinetix22
ConfigGroup,System,Startup,EmissionPath,EmissionMagnification,0.6670
ConfigGroup,System,Startup,Renderer,Quality,Realistic
ConfigGroup,System,Startup,SampleHolder,DriftXyNmPerSqrtSec,0.0000
ConfigGroup,System,Startup,SampleHolder,DriftZNmPerSqrtSec,0.0000


# Group: Channel
# Preset: AF647 dSTORM
ConfigGroup,Channel,AF647 dSTORM,Fluorophores,Mode,dSTORM
ConfigGroup,Channel,AF647 dSTORM,CellField,Microtubules_Label,Typical
ConfigGroup,Channel,AF647 dSTORM,Lasers,State,0
ConfigGroup,Channel,AF647 dSTORM,TransmittedLamp,State,0
ConfigGroup,Channel,AF647 dSTORM,Core,Shutter,Lasers

# Preset: mEos3.2 PALM
ConfigGroup,Channel,mEos3.2 PALM,Fluorophores,Mode,PALM
ConfigGroup,Channel,mEos3.2 PALM,CellField,Microtubules_Label,Typical
ConfigGroup,Channel,mEos3.2 PALM,Lasers,State,0
ConfigGroup,Channel,mEos3.2 PALM,TransmittedLamp,State,0
ConfigGroup,Channel,mEos3.2 PALM,Core,Shutter,Lasers

# Preset: ATTO655 DNA-PAINT
ConfigGroup,Channel,ATTO655 DNA-PAINT,Fluorophores,Mode,DNA-PAINT
ConfigGroup,Channel,ATTO655 DNA-PAINT,CellField,Microtubules_Label,Typical
ConfigGroup,Channel,ATTO655 DNA-PAINT,Lasers,State,0
ConfigGroup,Channel,ATTO655 DNA-PAINT,TransmittedLamp,State,0
ConfigGroup,Channel,ATTO655 DNA-PAINT,Core,Shutter,Lasers

# Preset: mEGFP WideField
ConfigGroup,Channel,mEGFP WideField,Fluorophores,Mode,WideField
ConfigGroup,Channel,mEGFP WideField,CellField,Microtubules_Label,Typical
ConfigGroup,Channel,mEGFP WideField,Lasers,State,0
ConfigGroup,Channel,mEGFP WideField,TransmittedLamp,State,0
ConfigGroup,Channel,mEGFP WideField,Core,Shutter,Lasers

# Preset: BrightField
ConfigGroup,Channel,BrightField,Lasers,State,0
ConfigGroup,Channel,BrightField,TransmittedLamp,State,0
ConfigGroup,Channel,BrightField,Core,Shutter,TransmittedLamp

# Preset: mEGFP WideField + BrightField
ConfigGroup,Channel,mEGFP WideField + BrightField,Fluorophores,Mode,WideField
ConfigGroup,Channel,mEGFP WideField + BrightField,CellField,Microtubules_Label,Typical
ConfigGroup,Channel,mEGFP WideField + BrightField,Lasers,State,0
ConfigGroup,Channel,mEGFP WideField + BrightField,TransmittedLamp,State,0
ConfigGroup,Channel,mEGFP WideField + BrightField,Core,Shutter,Multi Shutter


# Group: Objective
# Preset: 100x NA 1.40 Oil
ConfigGroup,Objective,100x NA 1.40 Oil,Objective,Label,100x/1.40 Oil

# Preset: 100x NA 1.49 Oil TIRF
ConfigGroup,Objective,100x NA 1.49 Oil TIRF,Objective,Label,100x/1.49 Oil TIRF

# Preset: 60x NA 1.42 Oil
ConfigGroup,Objective,60x NA 1.42 Oil,Objective,Label,60x/1.42 Oil

# Preset: 60x NA 1.20 Water
ConfigGroup,Objective,60x NA 1.20 Water,Objective,Label,60x/1.20 Water

# Preset: 20x NA 0.75 Air
ConfigGroup,Objective,20x NA 0.75 Air,Objective,Label,20x/0.75 Air


# Group: Camera
# Preset: Kinetix22
ConfigGroup,Camera,Kinetix22,Camera,CameraPreset,Kinetix22
ConfigGroup,Camera,Kinetix22,EmissionPath,EmissionMagnification,0.6670

# Preset: iXonUltra897
ConfigGroup,Camera,iXonUltra897,Camera,CameraPreset,iXonUltra897
ConfigGroup,Camera,iXonUltra897,EmissionPath,EmissionMagnification,1.6000


# Group: Quality
# Preset: Fast
ConfigGroup,Quality,Fast,Renderer,Quality,Fast

# Preset: Realistic
ConfigGroup,Quality,Realistic,Renderer,Quality,Realistic

# Preset: Exhaustive
ConfigGroup,Quality,Exhaustive,Renderer,Quality,Exhaustive


# Group: Drift
# Preset: Off
ConfigGroup,Drift,Off,SampleHolder,DriftXyNmPerSqrtSec,0.0000
ConfigGroup,Drift,Off,SampleHolder,DriftZNmPerSqrtSec,0.0000

# Preset: 5 nm per sqrt s
ConfigGroup,Drift,5 nm per sqrt s,SampleHolder,DriftXyNmPerSqrtSec,5.0000
ConfigGroup,Drift,5 nm per sqrt s,SampleHolder,DriftZNmPerSqrtSec,5.0000

# Preset: 10 nm per sqrt s
ConfigGroup,Drift,10 nm per sqrt s,SampleHolder,DriftXyNmPerSqrtSec,10.0000
ConfigGroup,Drift,10 nm per sqrt s,SampleHolder,DriftZNmPerSqrtSec,10.0000

# Preset: 20 nm per sqrt s
ConfigGroup,Drift,20 nm per sqrt s,SampleHolder,DriftXyNmPerSqrtSec,20.0000
ConfigGroup,Drift,20 nm per sqrt s,SampleHolder,DriftZNmPerSqrtSec,20.0000


# Group: Specimen
# Preset: CellField
ConfigGroup,Specimen,CellField,SampleHolder,Label,CellField


# PixelSize settings: the sensor pixel / the objective (MM divides by the EmissionPath magnifier)
# Resolution preset: 100x NA 1.40 Oil Kinetix22
ConfigPixelSize,100x NA 1.40 Oil Kinetix22,Objective,Label,100x/1.40 Oil
ConfigPixelSize,100x NA 1.40 Oil Kinetix22,Camera,CameraPreset,Kinetix22
PixelSize_um,100x NA 1.40 Oil Kinetix22,0.065
PixelSizeAffine,100x NA 1.40 Oil Kinetix22,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 100x NA 1.40 Oil iXonUltra897
ConfigPixelSize,100x NA 1.40 Oil iXonUltra897,Objective,Label,100x/1.40 Oil
ConfigPixelSize,100x NA 1.40 Oil iXonUltra897,Camera,CameraPreset,iXonUltra897
PixelSize_um,100x NA 1.40 Oil iXonUltra897,0.16
PixelSizeAffine,100x NA 1.40 Oil iXonUltra897,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 100x NA 1.49 Oil TIRF Kinetix22
ConfigPixelSize,100x NA 1.49 Oil TIRF Kinetix22,Objective,Label,100x/1.49 Oil TIRF
ConfigPixelSize,100x NA 1.49 Oil TIRF Kinetix22,Camera,CameraPreset,Kinetix22
PixelSize_um,100x NA 1.49 Oil TIRF Kinetix22,0.065
PixelSizeAffine,100x NA 1.49 Oil TIRF Kinetix22,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 100x NA 1.49 Oil TIRF iXonUltra897
ConfigPixelSize,100x NA 1.49 Oil TIRF iXonUltra897,Objective,Label,100x/1.49 Oil TIRF
ConfigPixelSize,100x NA 1.49 Oil TIRF iXonUltra897,Camera,CameraPreset,iXonUltra897
PixelSize_um,100x NA 1.49 Oil TIRF iXonUltra897,0.16
PixelSizeAffine,100x NA 1.49 Oil TIRF iXonUltra897,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 60x NA 1.42 Oil Kinetix22
ConfigPixelSize,60x NA 1.42 Oil Kinetix22,Objective,Label,60x/1.42 Oil
ConfigPixelSize,60x NA 1.42 Oil Kinetix22,Camera,CameraPreset,Kinetix22
PixelSize_um,60x NA 1.42 Oil Kinetix22,0.108333333333
PixelSizeAffine,60x NA 1.42 Oil Kinetix22,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 60x NA 1.42 Oil iXonUltra897
ConfigPixelSize,60x NA 1.42 Oil iXonUltra897,Objective,Label,60x/1.42 Oil
ConfigPixelSize,60x NA 1.42 Oil iXonUltra897,Camera,CameraPreset,iXonUltra897
PixelSize_um,60x NA 1.42 Oil iXonUltra897,0.266666666667
PixelSizeAffine,60x NA 1.42 Oil iXonUltra897,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 60x NA 1.20 Water Kinetix22
ConfigPixelSize,60x NA 1.20 Water Kinetix22,Objective,Label,60x/1.20 Water
ConfigPixelSize,60x NA 1.20 Water Kinetix22,Camera,CameraPreset,Kinetix22
PixelSize_um,60x NA 1.20 Water Kinetix22,0.108333333333
PixelSizeAffine,60x NA 1.20 Water Kinetix22,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 60x NA 1.20 Water iXonUltra897
ConfigPixelSize,60x NA 1.20 Water iXonUltra897,Objective,Label,60x/1.20 Water
ConfigPixelSize,60x NA 1.20 Water iXonUltra897,Camera,CameraPreset,iXonUltra897
PixelSize_um,60x NA 1.20 Water iXonUltra897,0.266666666667
PixelSizeAffine,60x NA 1.20 Water iXonUltra897,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 20x NA 0.75 Air Kinetix22
ConfigPixelSize,20x NA 0.75 Air Kinetix22,Objective,Label,20x/0.75 Air
ConfigPixelSize,20x NA 0.75 Air Kinetix22,Camera,CameraPreset,Kinetix22
PixelSize_um,20x NA 0.75 Air Kinetix22,0.325
PixelSizeAffine,20x NA 0.75 Air Kinetix22,1.0,0.0,0.0,0.0,1.0,0.0

# Resolution preset: 20x NA 0.75 Air iXonUltra897
ConfigPixelSize,20x NA 0.75 Air iXonUltra897,Objective,Label,20x/0.75 Air
ConfigPixelSize,20x NA 0.75 Air iXonUltra897,Camera,CameraPreset,iXonUltra897
PixelSize_um,20x NA 0.75 Air iXonUltra897,0.8
PixelSizeAffine,20x NA 0.75 Air iXonUltra897,1.0,0.0,0.0,0.0,1.0,0.0

